<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: NDI Aurora tracker"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tracking a single needle.
The computer needs to be on the same local network as Aurora SCU unit. The needle has to be plugged into the first slot"
    />
    <Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="/dev/ttyUSB0"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Needle" PortName="0" />
        <DataSource Type="Tool" Id="Base" PortName="1" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Needle" />
          <DataSource Id="Base" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="NeedleToTracker" />
        <Transform Name="BaseToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
